
# Gantry (mylinac). 
/gate/world/daughters/name                      mylinac
/gate/world/daughters/insert                    box
/gate/mylinac/setMaterial                       Air
/gate/mylinac/geometry/setXLength               2.2 m  
/gate/mylinac/geometry/setYLength               1.25 m
/gate/mylinac/geometry/setZLength               2.2 m
/gate/mylinac/placement/setRotationAxis         0 0 1 
/gate/mylinac/vis/setColor                      red
/gate/mylinac/vis/setVisible                    1

#  Linac Head 
/gate/mylinac/daughters/name                    myLinacHead
/gate/mylinac/daughters/insert                  box
/gate/myLinacHead/setMaterial                   Air
/gate/myLinacHead/geometry/setXLength           1.5 m  
/gate/myLinacHead/geometry/setYLength           1.2 m
/gate/myLinacHead/geometry/setZLength           1.5 m
/gate/myLinacHead/placement/setRotationAxis     0 1 0 
#/gate/myLinacHead/placement/setRotationAngle   0.000 deg
/gate/myLinacHead/vis/setColor                  green
/gate/myLinacHead/vis/setVisible                1

# Mylar
# Mylar is described in pdf file as a 0,004 inch  (0,1016 mm) thick foil
# located at 44,3 cm from isocenter 
/gate/myLinacHead/daughters/name                TBmylar
/gate/myLinacHead/daughters/insert              box
/gate/TBmylar/setMaterial                       Mylar
/gate/TBmylar/geometry/setXLength               500.0 mm  
/gate/TBmylar/geometry/setYLength               0.1016 mm  
/gate/TBmylar/geometry/setZLength               500 mm
/gate/TBmylar/placement/setTranslation          0.0 -557.0 0.0 mm
/gate/TBmylar/vis/setColor                      magenta
/gate/TBmylar/vis/forceSolid
/gate/TBmylar/vis/setVisible                    0

# Base Plate
# Base plate is strongly simplified compared to mycarian
# it is only a 0,6 inch thick cylinder with inner radius at  
# Base plate is at 53,3 cm from isocenter and 46,7 cm from source
# 469,7 from fake source
/gate/myLinacHead/daughters/name TB_BP
/gate/myLinacHead/daughters/insert cylinder
/gate/TB_BP/geometry/setRmax 302.26 mm
/gate/TB_BP/geometry/setRmin 115.57 mm
/gate/TB_BP/geometry/setHeight 15.24 mm
/gate/TB_BP/placement/setTranslation 0.0 -459.38 0.0 mm
/gate/TB_BP/placement/setRotationAxis 1 0 0
/gate/TB_BP/placement/setRotationAngle 90 deg
/gate/TB_BP/setMaterial AcceleratorPrimaryCollimatorMaterial
/gate/TB_BP/vis/setColor red
/gate/TB_BP/vis/forceSolid
/gate/TB_BP/vis/setVisible 1


# X1
/gate/myLinacHead/daughters/name X1
/gate/myLinacHead/daughters/insert box
/gate/X1/setMaterial Jaw
/gate/X1/geometry/setXLength 134.62 mm
/gate/X1/geometry/setYLength 77.724 mm 
/gate/X1/geometry/setZLength 218.44 mm
/gate/X1/placement/setRotationAxis 0 0 1
/gate/X1/vis/setColor white
/gate/X1/vis/forceSolid
/gate/X1/vis/setVisible 1

# X2
/gate/myLinacHead/daughters/name X2
/gate/myLinacHead/daughters/insert box
/gate/X2/setMaterial Jaw
/gate/X2/geometry/setXLength 134.62 mm
/gate/X2/geometry/setYLength 77.724 mm
/gate/X2/geometry/setZLength 218.44 mm
/gate/X2/placement/setRotationAxis 0 0 1
/gate/X2/vis/setColor white
/gate/X2/vis/forceSolid
/gate/X2/vis/setVisible 1

# Y1
/gate/myLinacHead/daughters/name Y1
/gate/myLinacHead/daughters/insert box
/gate/Y1/setMaterial Jaw
/gate/Y1/geometry/setXLength 187.96 mm 
/gate/Y1/geometry/setYLength 77.724 mm 
/gate/Y1/geometry/setZLength 119.38 mm
/gate/Y1/placement/setRotationAxis 1 0 0
/gate/Y1/vis/setColor white
/gate/Y1/vis/forceSolid
/gate/Y1/vis/setVisible 1

# Y2
/gate/myLinacHead/daughters/name Y2
/gate/myLinacHead/daughters/insert box
/gate/Y2/setMaterial Jaw
/gate/Y2/geometry/setXLength 187.96 mm 
/gate/Y2/geometry/setYLength 77.724 mm 
/gate/Y2/geometry/setZLength 119.38 mm
/gate/Y2/placement/setRotationAxis 1 0 0
/gate/Y2/vis/setColor white
/gate/Y2/vis/forceSolid
/gate/Y2/vis/setVisible 1

# MLC
#/control/execute                                mac/geo/mlc.mac

# Setup position parameters
#
/gate/mylinac/placement/setRotationAngle        -0.0 deg
/gate/mylinac/placement/setTranslation          0.0 1000.0 0.0 mm
/gate/myLinacHead/placement/setRotationAngle    0.0 deg
/gate/X1/placement/setTranslation               87.62218276849424 -403.23525174328853 0.0 mm
/gate/X2/placement/setTranslation               -87.62218276849424 -403.23525174328853 0.0 mm
/gate/Y1/placement/setTranslation               0.0 -314.65022738322835 -75.57505432437033 mm
/gate/Y2/placement/setTranslation               0.0 -314.65022738322835 75.57505432437033 mm
/gate/X1/placement/setRotationAngle             2.6607900833942186 deg
/gate/X2/placement/setRotationAngle             -2.6607900833942186 deg
/gate/Y1/placement/setRotationAngle             2.6063708540286914 deg
/gate/Y2/placement/setRotationAngle             -2.6063708540286914 deg


